<PlusConfiguration version="2.1">
  <DataCollection StartupDelaySec="1">
    <DeviceSet 
	Name="ACQUISITION BK8818E depth 5.3cm w Slicer post calibration" 
	Description="Epiphan frame grabber with Ascension EM trackers. Sensors in order: Red (111), Green (222), Blue (unmarked)."/>
    
	<Device
      Id="TrackerDevice"
      Type="Ascension3DG"
      AcquisitionRate="10"
      LocalTimeOffsetSec="0.15"
      FilterAcWideNotch="1"
      FilterAcNarrowNotch="0"
      FilterDcAdaptive="0"
      FilterLargeChange="0"
      FilterAlpha="0"
      ToolReferenceFrame="Tracker">
      <DataSources>
        <DataSource Type="Tool" Id="Stylus" BufferSize="500" PortName="0" AveragedItemsForFiltering="20"/>
        <DataSource Type="Tool" Id="Probe" BufferSize="500" PortName="1" AveragedItemsForFiltering="20"/>
        <DataSource Type="Tool" Id="Reference" BufferSize="500" PortName="2" AveragedItemsForFiltering="20"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="TrackerStream">
          <DataSource Id="Probe"/>
          <DataSource Id="Reference"/>
	  <DataSource Id="Stylus"/>
        </OutputChannel>
      </OutputChannels>
    </Device>

    <Device
      Id="VideoDevice"
      Type="Epiphan"
      AcquisitionRate="30"
      LocalTimeOffsetSec="0"
      VideoFormat="Y8"
      ClipRectangleOrigin="0 0"
      ClipRectangleSize="0 0">
      <DataSources>
        <DataSource Type="Video" Id="Video" PortUsImageOrientation="MN" BufferSize="100" AveragedItemsForFiltering="20"/>
      </DataSources>
      <OutputChannels>
        <OutputChannel Id="VideoStream" VideoDataSourceId="Video"/>
      </OutputChannels>
    </Device>

    <Device Id="TrackedVideoDevice" Type="VirtualMixer" LocalTimeOffsetSec="0">
      <InputChannels>
        <InputChannel Id="TrackerStream"/>
        <InputChannel Id="VideoStream"/>
      </InputChannels>
      <OutputChannels>
        <OutputChannel Id="TrackedVideoStream"/>
      </OutputChannels>
    </Device>

  </DataCollection>
  
  <PlusOpenIGTLinkServer 
    MaxNumberOfIgtlMessagesToSend="1" 
    MaxTimeSpentWithProcessingMs="50" 
    ListeningPort="18000" 
    SendValidTransformsOnly="true" 
    OutputChannelId="TrackedVideoStream" > 
    <DefaultClientInfo> 
      <MessageTypes> 
        <Message Type="TRACKEDFRAME" />
      </MessageTypes>
    </DefaultClientInfo>
  </PlusOpenIGTLinkServer>    
</PlusConfiguration>